PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = white
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = speech_SL
  Units = use prefs
  Screen = 1
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Routines
  Routine test1
    ImageComponent test1_image
      stopVal [duration (s)] = 0.46
      pos = [0, -.1]
      startVal [time (s)] = 0.0
      image = 2AFCAliens.png
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    SoundComponent test1_sound
      sound [set every repeat] = $soundFile1
      stopVal [duration (s)] = 0.46
      startVal [time (s)] = 0.0
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    TextComponent test1_text
      color = black
      stopVal [duration (s)] = 0.46
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Which phrase is like Meeple's?
        Press left for first and right for second.
  Routine test3
    ImageComponent test3_image
      stopVal [duration (s)] = 0.46
      pos = [0, -.1]
      startVal [time (s)] = 0.0
      image = 2AFCAliens.png
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    SoundComponent test3_sound
      sound [set every repeat] = $soundFile3
      stopVal [duration (s)] = 0.46
      startVal [time (s)] = 0.0
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    TextComponent test3_text
      color = black
      stopVal [duration (s)] = 0.46
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Which phrase is like Meeple's?
        Press left for first and right for second.
  Routine test2
    ImageComponent test2_image
      stopVal [duration (s)] = 0.46
      pos = [0, -.1]
      startVal [time (s)] = 0.0
      image = 2AFCAliens.png
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    SoundComponent test2_sound
      sound [set every repeat] = $soundFile2
      stopVal [duration (s)] = 0.46
      startVal [time (s)] = 0.0
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    TextComponent test2_text
      color = black
      stopVal [duration (s)] = 0.46
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Which phrase is like Meeple's?
        Press left for first and right for second.
  Routine test5
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  Routine test4
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  Routine test6
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  Routine triplet_pause
    ImageComponent triplet_pause_image
      stopVal [duration (s)] = 0.75
      pos = [0, -.1]
      startVal [time (s)] = 0.0
      image = 2AFCAliens.png
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    TextComponent triplet_pause_text
      color = black
      stopVal [duration (s)] = 0.75
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Which phrase is like Meeple's?
        Press left for first and right for second.
  Routine end
    TextComponent end_text
      color = black
      text = Great, you're all done! Thank you :) Press any key to exit.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent end_key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent end_sound
      sound = ssl_instr11.wav
      startVal [time (s)] = 0.0
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  Routine fam_trials
    SoundComponent fam_trials_sound
      sound [set every repeat] = $soundFile
      stopVal [duration (s)] = 0.46
      startVal [time (s)] = 0.0
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    KeyboardComponent fam_trials_key_resp
      stopVal [duration (s)] = 0.48
      forceEndRoutine = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    ImageComponent fam_trials_image
      stopVal [duration (s)] = 0.48
      startVal [time (s)] = 0.0
      image = Alien11.BMP
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  Routine target_syllable
    ImageComponent target_syllable_image
      startVal [time (s)] = 0.0
      image = Alien11.BMP
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    KeyboardComponent target_syllable_key_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    SoundComponent target_syllable_sound
      sound = du.wav
      startVal [time (s)] = 0.0
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  Routine question
    ImageComponent question_image
      pos = [0, -.1]
      startVal [time (s)] = 0.0
      image = 2AFCAliens.png
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    TextComponent question_text
      color = black
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Which phrase is like Meeple's?
        Press left for first and right for second.
    KeyboardComponent question_key_resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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  Routine instr1
    TextComponent instr1_text
      color = black
      text = Press the spacebar to begin.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent instr1_key_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    SoundComponent instr1_sound
      sound = ssl_instr1.wav
      startVal [time (s)] = 0.0
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  Routine instr2
    TextComponent instr2_text
      color = black
      text = Hi! We're going to listen to an alien language today.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent instr2_key_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    SoundComponent instr2_sound
      sound = ssl_instr2.wav
      startVal [time (s)] = 0.0
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  Routine instr3
    TextComponent instr3_text
      color = black
      text = This is Meeple!
      pos = [-0.3, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent instr3_key_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    ImageComponent instr3_image
      pos = [0.5, 0]
      startVal [time (s)] = 0.0
      image = Alien11.BMP
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    SoundComponent instr3_sound
      sound = ssl_instr3.wav
      startVal [time (s)] = 0.0
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  Routine instr4
    TextComponent instr4_text
      color = black
      text = Meeple is from Planet B. We're going to listen to Meeple speak her alien language.
      pos = [-0.3, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent instr4_key_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    ImageComponent instr4_image
      pos = [0.5, 0]
      startVal [time (s)] = 0.0
      image = Alien11.BMP
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    SoundComponent instr4_sound
      sound = ssl_instr4.wav
      startVal [time (s)] = 0.0
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  Routine instr5
    TextComponent instr5_text
      color = black
      text = Meeple is going to say her favorite word for you now. Listen carefully!
      pos = [-0.3, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent instr5_key_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    ImageComponent instr5_image
      pos = [0.5, 0]
      startVal [time (s)] = 0.0
      image = Alien11.BMP
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    SoundComponent instr5_sound
      sound = ssl_instr5.wav
      startVal [time (s)] = 0.0
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  Routine instr6
    TextComponent instr6_text
      color = black
      text = When you hear Meeple say her favorite word, press the spacebar as soon as you can. Let's practice!
      pos = [-0.3, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent instr6_key_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    ImageComponent instr6_image
      pos = [0.5, 0]
      startVal [time (s)] = 0.0
      image = Alien11.BMP
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    SoundComponent instr6_sound
      sound = ssl_instr6.wav
      startVal [time (s)] = 0.0
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  Routine instr7
    TextComponent instr7_text
      color = black
      text = Good job! Now Meeple is going to say many words in her alien language. Remember to press the spacebar whenever you hear Meeple's favorite word!
      pos = [-0.3, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent instr7_image
      pos = [0.5, 0]
      startVal [time (s)] = 0.0
      image = Alien11.BMP
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    KeyboardComponent instr7_key_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    SoundComponent instr7_sound
      sound = ssl_instr7.wav
      startVal [time (s)] = 0.0
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  Routine instr8
    TextComponent instr8_text
      color = black
      text = Great, you did it!
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent instr8_key_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    SoundComponent instr8_sound
      sound = ssl_instr8.wav
      startVal [time (s)] = 0.0
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  Routine instr9
    TextComponent instr9_text
      color = black
      text = Now look at these two aliens:
      pos = [0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent instr9_image
      pos = [0, -0.1]
      startVal [time (s)] = 0.0
      image = 2AFCAliens.png
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    KeyboardComponent instr9_key_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    SoundComponent instr9_sound
      sound = ssl_instr9.wav
      startVal [time (s)] = 0.0
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  Routine gap
    TextComponent gap_text
      color = black
      text = Please wait...
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instr10
    TextComponent instr10_text
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Each of these aliens will say a short phrase. Please try your best to identify which phrase sounds more like Meeple's language. If you don't know the answer, just give your best guess!

        Press the left arrow if the first alien's phrase sounds more like Meeple's language, and press the right arrow if the second alien's phrase sounds more like Meeple's language.
    KeyboardComponent instr10_key_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    SoundComponent instr10_sound
      sound = ssl_instr10.wav
      startVal [time (s)] = 0.0
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  Routine target_practice
    TextComponent target_practice_text
      color = black
      text = Press space!
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent target_practice_key_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    SoundComponent target_practice_sound
      sound = du.wav
      startVal [time (s)] = 0.0
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Flow
  Routine instr1
  Routine instr2
  Routine instr3
  Routine instr4
  Routine instr5
  Routine target_syllable
  Routine instr6
  Routine target_practice
  Routine instr7
  LoopInitiator fam_trials_loop loopType="TrialHandler"
    conditionsFile = speech_soundFileList2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'soundFile': u'pa.wav'},
      {u'soundFile': u'bi.wav'},
      {u'soundFile': u'ku.wav'},
      {u'soundFile': u'go.wav'},
      {u'soundFile': u'la.wav'},
      {u'soundFile': u'tu.wav'},
      {u'soundFile': u'pa.wav'},
      {u'soundFile': u'bi.wav'},
      {u'soundFile': u'ku.wav'},
      {u'soundFile': u'da.wav'},
      {u'soundFile': u'ro.wav'},
      {u'soundFile': u'pi.wav'},
      {u'soundFile': u'ti.wav'},
      {u'soundFile': u'bu.wav'},
      {u'soundFile': u'do.wav'},
      {u'soundFile': u'da.wav'},
      {u'soundFile': u'ro.wav'},
      {u'soundFile': u'pi.wav'},
      {u'soundFile': u'go.wav'},
      {u'soundFile': u'la.wav'},
      {u'soundFile': u'tu.wav'},
      {u'soundFile': u'ti.wav'},
      {u'soundFile': u'bu.wav'},
      {u'soundFile': u'do.wav'},
      {u'soundFile': u'pa.wav'},
      {u'soundFile': u'bi.wav'},
      {u'soundFile': u'ku.wav'},
      {u'soundFile': u'ti.wav'},
      {u'soundFile': u'bu.wav'},
      {u'soundFile': u'do.wav'},
      {u'soundFile': u'da.wav'},
      {u'soundFile': u'ro.wav'},
      {u'soundFile': u'pi.wav'},
      {u'soundFile': u'pa.wav'},
      {u'soundFile': u'bi.wav'},
      {u'soundFile': u'ku.wav'},
      {u'soundFile': u'go.wav'},
      {u'soundFile': u'la.wav'},
      {u'soundFile': u'tu.wav'},
      {u'soundFile': u'da.wav'},
      {u'soundFile': u'ro.wav'},
      {u'soundFile': u'pi.wav'},
      {u'soundFile': u'ti.wav'},
      {u'soundFile': u'bu.wav'},
      {u'soundFile': u'do.wav'},
      {u'soundFile': u'go.wav'},
      {u'soundFile': u'la.wav'},
      {u'soundFile': u'tu.wav'},
      {u'soundFile': u'pa.wav'},
      {u'soundFile': u'bi.wav'},
      {u'soundFile': u'ku.wav'},
      {u'soundFile': u'da.wav'},
      {u'soundFile': u'ro.wav'},
      {u'soundFile': u'pi.wav'},
      {u'soundFile': u'go.wav'},
      {u'soundFile': u'la.wav'},
      {u'soundFile': u'tu.wav'},
      {u'soundFile': u'ti.wav'},
      {u'soundFile': u'bu.wav'}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
    Routine fam_trials
  LoopTerminator fam_trials_loop
  Routine instr8
  Routine instr9
  Routine instr10
  Routine instr1
  LoopInitiator test_trials loopType="TrialHandler"
    conditionsFile = speech_forced_test_1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'corrAns': u'left', u'soundFile3': u'pu.wav', u'soundFile2': u'ba.wav', u'soundFile1': u'di.wav', u'soundFile6': u'bi.wav', u'soundFile5': u'pa.wav', u'soundFile4': u'di.wav'},
      {u'corrAns': u'left', u'soundFile3': u'pu.wav', u'soundFile2': u'ba.wav', u'soundFile1': u'di.wav', u'soundFile6': u'du.wav', u'soundFile5': u'tu.wav', u'soundFile4': u'bu.wav'},
      {u'corrAns': u'left', u'soundFile3': u'pu.wav', u'soundFile2': u'ba.wav', u'soundFile1': u'di.wav', u'soundFile6': u'pu.wav', u'soundFile5': u'ti.wav', u'soundFile4': u'pi.wav'},
      {u'corrAns': u'left', u'soundFile3': u'pu.wav', u'soundFile2': u'ba.wav', u'soundFile1': u'di.wav', u'soundFile6': u'da.wav', u'soundFile5': u'ba.wav', u'soundFile4': u'ta.wav'},
      {u'corrAns': u'left', u'soundFile3': u'da.wav', u'soundFile2': u'pa.wav', u'soundFile1': u'bu.wav', u'soundFile6': u'bi.wav', u'soundFile5': u'pa.wav', u'soundFile4': u'di.wav'},
      {u'corrAns': u'left', u'soundFile3': u'da.wav', u'soundFile2': u'pa.wav', u'soundFile1': u'bu.wav', u'soundFile6': u'du.wav', u'soundFile5': u'tu.wav', u'soundFile4': u'bu.wav'},
      {u'corrAns': u'left', u'soundFile3': u'da.wav', u'soundFile2': u'pa.wav', u'soundFile1': u'bu.wav', u'soundFile6': u'pu.wav', u'soundFile5': u'ti.wav', u'soundFile4': u'pi.wav'},
      {u'corrAns': u'left', u'soundFile3': u'da.wav', u'soundFile2': u'pa.wav', u'soundFile1': u'bu.wav', u'soundFile6': u'da.wav', u'soundFile5': u'ba.wav', u'soundFile4': u'ta.wav'}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
    Routine test1
    Routine test2
    Routine test3
    Routine triplet_pause
    Routine test4
    Routine test5
    Routine test6
    Routine question
    Routine gap
  LoopTerminator test_trials
  Routine end
